PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = PrisonersdilemmaToneRillingFull
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Routines
  Routine WelcomeScreen1
    PolygonComponent background1
      fillColor = white
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent instructions1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Prisoners Dilemma Game!
    KeyboardComponent key_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine WelcomeScreen2
    PolygonComponent background2
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent instructions2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You must decide whether you want to cooperate or not cooperate with your partner.
    KeyboardComponent key_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine WaitforPartner
    PolygonComponent partnerbackground
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent partnerassign
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Wait for your partner!
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  Routine blank500
    TextComponent text_2
      durationEstim = .5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine FeedCC
    CodeComponent earningsCC
      Code Type = Py
      Begin Routine:
        #Earnings
        player1_earnings += 2
        player2_earnings += 2
    ImageComponent FeedCCimage
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent currentround4
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0,.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $rounds
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    TextComponent player1_earningsfeedCC
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsfeedCC
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct12
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = Both players cooperated!
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  Routine FeedCD
    CodeComponent earningsCD
      Code Type = Py
      Begin Routine:
        # Earnings
        player1_earnings += 0
        player2_earnings += 3
    ImageComponent FeedCDimage
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent currentround5
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0,.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $rounds
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    TextComponent player1_earningsfeedCD
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsfeedCD
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct13
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = Player 1 cooperated, Player 2 defected!
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  Routine FeedDC
    CodeComponent earningsDC
      Code Type = Py
      Begin Routine:
        # Earnings
        player1_earnings += 3
        player2_earnings += 0
    ImageComponent FeedDCimage
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent currentround6
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0,.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $rounds
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    TextComponent player1_earningsfeedDC
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsfeedDC
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct14
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = Player 1 defected, Player 2 cooperated!
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  Routine FeedDD
    CodeComponent earningsDD
      Code Type = Py
      Begin Routine:
        #Earnings
        player1_earnings += 1
        player2_earnings += 1
    ImageComponent FeedDDimage
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent currentround7
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0,.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $rounds
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    TextComponent player1_earningsfeedDD
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsfeedDD
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct15
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = Both players defected!
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  Routine blank
    PolygonComponent wait1
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine CompleteScreen
    PolygonComponent background7
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent playagain
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Thank you for your participation!

        Please see the researcher for debriefing.
  Routine AntiCoop1
    ImageComponent AntiCoopImage
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent currentround1
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $rounds
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    TextComponent player1_earningsanticoop
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsanticoop
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct2
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = Waiting for partner response
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  Routine AntiCoop2
    ImageComponent AntiCoopImage_2
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent currentround_2
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $rounds
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    TextComponent player1_earningsanticoop_2
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsanticoop_2
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct3
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = Waiting for partner response
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  Routine AntiCoop3
    ImageComponent AntiCoopImage_3
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent currentround_3
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $rounds
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    TextComponent player1_earningsanticoop_3
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsanticoop_3
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct4
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = Waiting for partner response
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  Routine AntiCoop4
    ImageComponent AntiCoopImage_4
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent currentround_4
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $rounds
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    TextComponent player1_earningsanticoop_4
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsanticoop_4
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct5
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = Waiting for partner response
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  Routine AntiDef1
    ImageComponent AntiDefImage
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent currentround3
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $rounds
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    TextComponent player1_earningsantidef
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsantidef
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct7
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = Waiting for partner response
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  Routine AntiDef2
    ImageComponent AntiDefImage_2
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent currentround3_2
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $rounds
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    TextComponent player1_earningsantidef_2
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsantidef_2
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct8
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = Waiting for partner response
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  Routine AntiDef3
    ImageComponent AntiDefImage_3
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent currentround3_3
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $rounds
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    TextComponent player1_earningsantidef_3
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsantidef_3
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct9
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = Waiting for partner response
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  Routine AntiDef4
    ImageComponent AntiDefImage_4
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent currentround3_4
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $rounds
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    TextComponent player1_earningsantidef_4
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsantidef_4
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct10
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = Waiting for partner response
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  Routine roundcount
    CodeComponent roundcountcode
      Code Type = Py
      End Routine:
        rounds += 1

        thisExp.addData("outcomes",outcomesExc)
  Routine WelcomeScreen6
    PolygonComponent background6
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent instructions6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Let's Begin!
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    KeyboardComponent key_resp6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine WelcomeScreen5
    PolygonComponent background5
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent instructions5
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now play 5 practice rounds with the computer so you can learn how the game works.
    KeyboardComponent key_resp5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine WelcomeScreen4
    PolygonComponent background4
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent instructions4
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The combination of your and the other player's decisions will determine how much money you get after each round.
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    KeyboardComponent key_resp4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine WelcomeScreen3
    PolygonComponent background3
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent instructions3
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        During gameplay, you will press C to cooperate and D to not cooperate.
    KeyboardComponent key_resp3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine DecisionPrac
    CodeComponent ToneAlgorithm
      Code Type = Py
      Begin Routine:
        #round check
        if rounds == 5:
            practiceloop.finished = True


        #players
        player1 = " "
        player2 = " "
        outcomesExc = " "

        #number assignment for computer cooperation probablility
        compcoop = round(random.uniform(0,100))

        #data to be added to excel sheet
        thisExp.addData("round_number",rounds)
      End Routine:
        if rounds == 1:
            player2 = "c"
        if rounds == 2:
            if outcomes == ["cc"]:
                if compcoop <= 93:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes == ["dc"]:
                if compcoop <= 36:
                    player2 = "c"
                else:
                    player2 = "d"
        if 3 <= rounds <= 10:
            if outcomes[-2:] == ["cc","cc"]:
                if compcoop <= 92:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","cc"]:
                if compcoop <= 86:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","cc"]:
                if compcoop <= 78:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","cc"]:
                if compcoop <= 50:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cc","cd"]:
                if compcoop <= 58:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","cd"]:
                if compcoop <= 0:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","cd"]:
                if compcoop <= 33:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","cd"]:
                if compcoop <= 33:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cc","dc"]:
                if compcoop <= 86:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","dc"]:
                if compcoop <= 80:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","dc"]:
                if compcoop <= 33:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","dc"]:
                if compcoop <= 20:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cc","dd"]:
                if compcoop <= 50:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","dd"]:
                if compcoop <= 38:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","dd"]:
                if compcoop <= 50:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","dd"]:
                if compcoop <= 43:
                    player2 = "c"
                else:
                    player2 = "d"
        if 11 <= rounds <= 18:
            if outcomes[-2:] == ["cc","cc"]:
                if compcoop <= 92:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","cc"]:
                if compcoop <= 90:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","cc"]:
                if compcoop <= 100:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","cc"]:
                if compcoop <= 60:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cc","cd"]:
                if compcoop <= 13:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","cd"]:
                if compcoop <= 20:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","cd"]:
                if compcoop <= 67:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","cd"]:
                if compcoop <= 33:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cc","dc"]:
                if compcoop <= 83:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","dc"]:
                if compcoop <= 63:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","dc"]:
                if compcoop <= 0:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","dc"]:
                if compcoop <= 33:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cc","dd"]:
                if compcoop <= 33:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","dd"]:
                if compcoop <= 8:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","dd"]:
                if compcoop <= 50:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","dd"]:
                if compcoop <= 25:
                    player2 = "c"
                else:
                    player2 = "d"
        if 5 <= rounds <= 18:
            if outcomes[-4:] == ["cc","cc","cc","cc"]:
                player2 = "d"
        if rounds > 18:
            player2 = "d"

        if key_decision.keys == 'c':
            player1 = 'c'
            doAntiCoop1 = 0
            doAntiCoop2 = 0
            doAntiCoop3 = 0
            doAntiCoop4 = 0
            doAntiCoop5 = 1
            doAntiDef1 = 0
            doAntiDef2 = 0
            doAntiDef3 = 0
            doAntiDef4 = 0
            doAntiDef5 = 0

            if player1 == "c" and player2 == "c":
                doFeedCC = 1
                doFeedCD = 0
                doFeedDC = 0
                doFeedDD = 0
                outcomes += ["cc"]
                outcomesExc = "cc"
            if player1 == "c" and player2 == "d":
                doFeedCC = 0
                doFeedCD = 1
                doFeedDC = 0
                doFeedDD = 0
                outcomes += ["cd"]
                outcomesExc = "cd"

        elif key_decision.keys == 'd':
            player1 = 'd'
            doAntiCoop1 = 0
            doAntiCoop2 = 0
            doAntiCoop3 = 0
            doAntiCoop4 = 0
            doAntiCoop5 = 0
            doAntiDef1 = 0
            doAntiDef2 = 0
            doAntiDef3 = 0
            doAntiDef4 = 0
            doAntiDef5 = 1

            if player1 == "d" and player2 == "c":
                doFeedCC = 0
                doFeedCD = 0
                doFeedDC = 1
                doFeedDD = 0
                outcomes += ["dc"]
                outcomesExc = "dc"
            if player1 == "d" and player2 == "d":
                doFeedCC = 0
                doFeedCD = 0
                doFeedDC = 0
                doFeedDD = 1
                outcomes += ["dd"]
                outcomesExc = "dd"

        #data to be added to Excel
        thisExp.addData("computer_decision",player2)
        thisExp.addData("probability of computer cooperation",compcoop)
    ImageComponent Decision_Screen1
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
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    TextComponent currentround
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rounds
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    TextComponent player1_earningsdec
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsdec
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = Choose cooperate (C) or not cooperate (D)
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    TextComponent phaseinstruct1_2
      color [set every repeat] = red
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 6.5
      text [set every repeat] = Please make your decision (C or D)
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    KeyboardComponent key_decision
      allowedKeys = 'c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DecisionFG
    CodeComponent ToneAlgorithm_2
      Code Type = Py
      Begin Routine:
        #round check
        if rounds == 20:
            fullgameloop.finished = True


        #players
        player1 = " "
        player2 = " "
        outcomesExc = " "

        #number assignment for computer cooperation probablility
        compcoop = round(random.uniform(0,100))

        #data to be added to excel sheet
        thisExp.addData("round_number",rounds)
      End Routine:
        if rounds == 1:
            player2 = "c"
        if rounds == 2:
            if outcomes == ["cc"]:
                if compcoop <= 93:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes == ["dc"]:
                if compcoop <= 36:
                    player2 = "c"
                else:
                    player2 = "d"
        if 3 <= rounds <= 10:
            if outcomes[-2:] == ["cc","cc"]:
                if compcoop <= 92:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","cc"]:
                if compcoop <= 86:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","cc"]:
                if compcoop <= 78:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","cc"]:
                if compcoop <= 50:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cc","cd"]:
                if compcoop <= 58:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","cd"]:
                if compcoop <= 0:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","cd"]:
                if compcoop <= 33:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","cd"]:
                if compcoop <= 33:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cc","dc"]:
                if compcoop <= 86:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","dc"]:
                if compcoop <= 80:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","dc"]:
                if compcoop <= 33:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","dc"]:
                if compcoop <= 20:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cc","dd"]:
                if compcoop <= 50:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","dd"]:
                if compcoop <= 38:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","dd"]:
                if compcoop <= 50:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","dd"]:
                if compcoop <= 43:
                    player2 = "c"
                else:
                    player2 = "d"
        if 11 <= rounds <= 18:
            if outcomes[-2:] == ["cc","cc"]:
                if compcoop <= 92:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","cc"]:
                if compcoop <= 90:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","cc"]:
                if compcoop <= 100:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","cc"]:
                if compcoop <= 60:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cc","cd"]:
                if compcoop <= 13:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","cd"]:
                if compcoop <= 20:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","cd"]:
                if compcoop <= 67:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","cd"]:
                if compcoop <= 33:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cc","dc"]:
                if compcoop <= 83:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","dc"]:
                if compcoop <= 63:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","dc"]:
                if compcoop <= 0:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","dc"]:
                if compcoop <= 33:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cc","dd"]:
                if compcoop <= 33:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["cd","dd"]:
                if compcoop <= 8:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dc","dd"]:
                if compcoop <= 50:
                    player2 = "c"
                else:
                    player2 = "d"
            elif outcomes[-2:] == ["dd","dd"]:
                if compcoop <= 25:
                    player2 = "c"
                else:
                    player2 = "d"
        if 5 <= rounds <= 18:
            if outcomes[-4:] == ["cc","cc","cc","cc"]:
                player2 = "d"
        if rounds > 18:
            player2 = "d"

        if key_decision2.keys == 'c':
            player1 = 'c'
            anti1 = random.choice(anticoop)
            if anti1 == "AntiCoop1":
                doAntiCoop1 = 1
                doAntiCoop2 = 0
                doAntiCoop3 = 0
                doAntiCoop4 = 0
                doAntiCoop5 = 0
                doAntiDef1 = 0
                doAntiDef2 = 0
                doAntiDef3 = 0
                doAntiDef4 = 0
                doAntiDef5 = 0
            if anti1 == "AntiCoop2":
                doAntiCoop1 = 0
                doAntiCoop2 = 1
                doAntiCoop3 = 0
                doAntiCoop4 = 0
                doAntiCoop5 = 0
                doAntiDef1 = 0
                doAntiDef2 = 0
                doAntiDef3 = 0
                doAntiDef4 = 0
                doAntiDef5 = 0
            if anti1 == "AntiCoop3":
                doAntiCoop1 = 0
                doAntiCoop2 = 0
                doAntiCoop3 = 1
                doAntiCoop4 = 0
                doAntiCoop5 = 0
                doAntiDef1 = 0
                doAntiDef2 = 0
                doAntiDef3 = 0
                doAntiDef4 = 0
                doAntiDef5 = 0
            if anti1 == "AntiCoop4":
                doAntiCoop1 = 0
                doAntiCoop2 = 0
                doAntiCoop3 = 0
                doAntiCoop4 = 1
                doAntiCoop5 = 0
                doAntiDef1 = 0
                doAntiDef2 = 0
                doAntiDef3 = 0
                doAntiDef4 = 0
                doAntiDef5 = 0
            if anti1 == "AntiCoop5":
                doAntiCoop1 = 0
                doAntiCoop2 = 0
                doAntiCoop3 = 0
                doAntiCoop4 = 0
                doAntiCoop5 = 1
                doAntiDef1 = 0
                doAntiDef2 = 0
                doAntiDef3 = 0
                doAntiDef4 = 0
                doAntiDef5 = 0

            if player1 == "c" and player2 == "c":
                doFeedCC = 1
                doFeedCD = 0
                doFeedDC = 0
                doFeedDD = 0
                num_coop_player1 += 1
                outcomes += ["cc"]
                outcomesExc = "cc"
            if player1 == "c" and player2 == "d":
                doFeedCC = 0
                doFeedCD = 1
                doFeedDC = 0
                doFeedDD = 0
                num_coop_player1 += 1
                outcomes += ["cd"]
                outcomesExc = "cd"

        elif key_decision2.keys == 'd':
            player1 = 'd'
            anti2 = random.choice(antidef)
            if anti2 == "AntiDef1":
                doAntiCoop1 = 0
                doAntiCoop2 = 0
                doAntiCoop3 = 0
                doAntiCoop4 = 0
                doAntiCoop5 = 0
                doAntiDef1 = 1
                doAntiDef2 = 0
                doAntiDef3 = 0
                doAntiDef4 = 0
                doAntiDef5 = 0
            if anti2 == "AntiDef2":
                doAntiCoop1 = 0
                doAntiCoop2 = 0
                doAntiCoop3 = 0
                doAntiCoop4 = 0
                doAntiCoop5 = 0
                doAntiDef1 = 0
                doAntiDef2 = 1
                doAntiDef3 = 0
                doAntiDef4 = 0
                doAntiDef5 = 0
            if anti2 == "AntiDef3":
                doAntiCoop1 = 0
                doAntiCoop2 = 0
                doAntiCoop3 = 0
                doAntiCoop4 = 0
                doAntiCoop5 = 0
                doAntiDef1 = 0
                doAntiDef2 = 0
                doAntiDef3 = 1
                doAntiDef4 = 0
                doAntiDef5 = 0
            if anti2 == "AntiDef4":
                doAntiCoop1 = 0
                doAntiCoop2 = 0
                doAntiCoop3 = 0
                doAntiCoop4 = 0
                doAntiCoop5 = 0
                doAntiDef1 = 0
                doAntiDef2 = 0
                doAntiDef3 = 0
                doAntiDef4 = 1
                doAntiDef5 = 0
            if anti2 == "AntiDef5":
                doAntiCoop1 = 0
                doAntiCoop2 = 0
                doAntiCoop3 = 0
                doAntiCoop4 = 0
                doAntiCoop5 = 0
                doAntiDef1 = 0
                doAntiDef2 = 0
                doAntiDef3 = 0
                doAntiDef4 = 0
                doAntiDef5 = 1

            if player1 == "d" and player2 == "c":
                doFeedCC = 0
                doFeedCD = 0
                doFeedDC = 1
                doFeedDD = 0
                num_def_player1 += 1
                outcomes += ["dc"]
                outcomesExc = "dc"
            if player1 == "d" and player2 == "d":
                doFeedCC = 0
                doFeedCD = 0
                doFeedDC = 0
                doFeedDD = 1
                num_def_player1 += 1
                outcomes += ["dd"]
                outcomesExc = "dd"

        #data to be added to Excel
        thisExp.addData("computer_decision",player2)
        thisExp.addData("probability of computer cooperation",compcoop)
    ImageComponent Decision_Screen_2
      image [set every repeat] = $PhaseContingency
      size = (2, 1)
      startVal [time (s)] = 0.0
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    TextComponent currentround_7
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rounds
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    TextComponent player1_earningsdec_3
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (-.55,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $player1_earnings
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    TextComponent player2_earningsdec_3
      color [set every repeat] = black
      letterHeight = 0.08
      pos = (.64,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $player2_earnings
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    TextComponent phaseinstruct_2
      color [set every repeat] = black
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = Choose cooperate (C) or not cooperate (D)
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    TextComponent phaseinstruct1_3
      color [set every repeat] = red
      letterHeight = 0.045
      pos = (0.025,.3)
      saveStartStop = False
      startVal [time (s)] = 6.5
      text [set every repeat] = Please make your decision (C or D)
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    KeyboardComponent key_decision2
      allowedKeys = 'c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AntiCoop5
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  Routine AntiDef5
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  Routine fullgamevariables
    CodeComponent game_onCode_2
      Code Type = Py
      Begin Routine:
        #reset game outcomes list (should be 20 for each game)
        outcomes = []

        #resest rounds
        rounds = 1

        #reset player earnings
        player1_earnings = 0
        player2_earnings = 0

        #reset number of cooperation and defections for player 1
        num_coop_player1 = 0
        num_def_player1 = 0


        #Anticipation Contigency loop list options
        anticoop = ["AntiCoop1","AntiCoop2","AntiCoop3","AntiCoop4","AntiCoop5"]
        antidef = ["AntiDef1","AntiDef2","AntiDef3","AntiDef4","AntiDef5"]
  Routine pracgamevariables
    CodeComponent game_onCode
      Code Type = Py
      Begin Experiment:
        #Python Modules
        import random, time, math


        #set the seed for the experiment
        newSeed = int(math.modf(time.time())[1])
        random.seed(newSeed)


        # decision list
        decision = ["c","d"]

        #full game outcomes list (should be 20 for each game)
        outcomes = []

        #rounds
        rounds = 1

        #player earnings
        player1_earnings = 0
        player2_earnings = 0

        #number of cooperation and defections for player 1
        num_coop_player1 = 0
        num_def_player1 = 0

        #Phase Contingency loops
        doAntiCoop1 = 0
        doAntiCoop2 = 0
        doAntiCoop3 = 0
        doAntiCoop4 = 0
        doAntiCoop5 = 0
        doAntiDef1 = 0
        doAntiDef2 = 0
        doAntiDef3 = 0
        doAntiDef4 = 0
        doAntiDef5 = 0
        doFeedCC = 0
        doFeedCD = 0
        doFeedDC = 0
        doFeedDD = 0

        #Anticipation Contigency loop list options
        anticoop = ["AntiCoop1","AntiCoop2","AntiCoop3","AntiCoop4","AntiCoop5"]
        antidef = ["AntiDef1","AntiDef2","AntiDef3","AntiDef4","AntiDef5"]

        #Seed number
        thisExp.addData("seed_number",newSeed)
      End Experiment:
        #data to be added to Excel
        thisExp.addData("player1_earnings",player1_earnings)
        thisExp.addData("player2_earnings",player2_earnings)
        thisExp.addData("number of participant cooperations",num_coop_player1)
        thisExp.addData("number of participant defections",num_def_player1)
  Routine FullGameScreen1
    PolygonComponent background8
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent fullgameinfo
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Practice Game Complete!
    KeyboardComponent key_respFG
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FullGameScreen2
    PolygonComponent background8_2
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent fullgameinfo_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now play 20 rounds with the partner you met earlier.
    KeyboardComponent key_respFG_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FullGameScreen3
    PolygonComponent background8_3
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent fullgameinfo_3
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = A running total for your earnings and your partner's earnings will be displayed on the screen during the game.
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    KeyboardComponent key_respFG_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine extradata
    CodeComponent extradatacode
      Code Type = Py
Flow
  Routine pracgamevariables
  Routine WelcomeScreen1
  Routine WelcomeScreen2
  Routine WelcomeScreen3
  Routine WelcomeScreen4
  Routine WelcomeScreen5
  Routine WelcomeScreen6
  Routine blank
  LoopInitiator practiceloop loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = stimuli\PDstimuli.xlsx
    loopType = random
    nReps = 9999
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    conditions:
      [OrderedDict([('PhaseContingency', 'images/DecisionPsychoPy.jpg')]),
      OrderedDict([('PhaseContingency', 'images/Decision2PsychoPy.jpg')]),
      OrderedDict([('PhaseContingency', 'images/AnticipCoopPsychoPy.jpg')]),
      OrderedDict([('PhaseContingency', 'images/AnticipDefPsychoPy.jpg')]),
      OrderedDict([('PhaseContingency', 'images/FeedbackCCPsychoPy.jpg')]),
      OrderedDict([('PhaseContingency', 'images/FeedbackCDPsychoPy.jpg')]),
      OrderedDict([('PhaseContingency', 'images/FeedbackDCPsychoPy.jpg')]),
      OrderedDict([('PhaseContingency', 'images/FeedbackDDPsychoPy.jpg')]),
      OrderedDict([('PhaseContingency', 'images/PDtemplatePsychoPy.jpg')])]
    Routine DecisionPrac
    LoopInitiator anticooploop loopType="TrialHandler"
      Selected rows = 2
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doAntiCoop5
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      conditions:
        [OrderedDict([('PhaseContingency', 'images/DecisionPsychoPy.jpg')]),
        OrderedDict([('PhaseContingency', 'images/Decision2PsychoPy.jpg')]),
        OrderedDict([('PhaseContingency', 'images/AnticipCoopPsychoPy.jpg')]),
        OrderedDict([('PhaseContingency', 'images/AnticipDefPsychoPy.jpg')]),
        OrderedDict([('PhaseContingency', 'images/FeedbackCCPsychoPy.jpg')]),
        OrderedDict([('PhaseContingency', 'images/FeedbackCDPsychoPy.jpg')]),
        OrderedDict([('PhaseContingency', 'images/FeedbackDCPsychoPy.jpg')]),
        OrderedDict([('PhaseContingency', 'images/FeedbackDDPsychoPy.jpg')]),
        OrderedDict([('PhaseContingency', 'images/PDtemplatePsychoPy.jpg')])]
      Routine AntiCoop5
    LoopTerminator anticooploop
    LoopInitiator antidefloop loopType="TrialHandler"
      Selected rows = 3
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doAntiDef5
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      conditions:
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      Routine AntiDef5
    LoopTerminator antidefloop
    LoopInitiator feedCCloop loopType="TrialHandler"
      Selected rows = 4
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doFeedCC
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      conditions:
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      Routine FeedCC
    LoopTerminator feedCCloop
    LoopInitiator feedCDloop loopType="TrialHandler"
      Selected rows = 5
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doFeedCD
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      conditions:
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      Routine FeedCD
    LoopTerminator feedCDloop
    LoopInitiator feedDCloop loopType="TrialHandler"
      Selected rows = 6
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doFeedDC
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      conditions:
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      Routine FeedDC
    LoopTerminator feedDCloop
    LoopInitiator feedDDloop loopType="TrialHandler"
      Selected rows = 7
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doFeedDD
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      conditions:
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      Routine FeedDD
    LoopTerminator feedDDloop
    Routine roundcount
    Routine blank
  LoopTerminator practiceloop
  Routine blank
  Routine fullgamevariables
  Routine FullGameScreen1
  Routine FullGameScreen2
  Routine FullGameScreen3
  Routine WelcomeScreen6
  Routine blank
  Routine WaitforPartner
  Routine blank
  LoopInitiator fullgameloop loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = stimuli\PDstimuli.xlsx
    loopType = random
    nReps = 9999
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    conditions:
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    Routine DecisionFG
    LoopInitiator anticoop1loop loopType="TrialHandler"
      Selected rows = 2
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doAntiCoop1
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      conditions:
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      Routine AntiCoop1
    LoopTerminator anticoop1loop
    LoopInitiator anticoop2loop loopType="TrialHandler"
      Selected rows = 2
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doAntiCoop2
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      conditions:
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      Routine AntiCoop2
    LoopTerminator anticoop2loop
    LoopInitiator anticoop3loop loopType="TrialHandler"
      Selected rows = 2
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doAntiCoop3
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      conditions:
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      Routine AntiCoop3
    LoopTerminator anticoop3loop
    LoopInitiator anticoop4loop loopType="TrialHandler"
      Selected rows = 2
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doAntiCoop4
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      conditions:
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      Routine AntiCoop4
    LoopTerminator anticoop4loop
    LoopInitiator anticoop5loop loopType="TrialHandler"
      Selected rows = 2
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doAntiCoop5
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      conditions:
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      Routine AntiCoop5
    LoopTerminator anticoop5loop
    LoopInitiator antidef1loop loopType="TrialHandler"
      Selected rows = 3
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doAntiDef1
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      conditions:
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      Routine AntiDef1
    LoopTerminator antidef1loop
    LoopInitiator antidef2loop loopType="TrialHandler"
      Selected rows = 3
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doAntiDef2
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      conditions:
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      Routine AntiDef2
    LoopTerminator antidef2loop
    LoopInitiator antidef3loop loopType="TrialHandler"
      Selected rows = 3
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doAntiDef3
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      conditions:
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      Routine AntiDef3
    LoopTerminator antidef3loop
    LoopInitiator antidef4loop loopType="TrialHandler"
      Selected rows = 3
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doAntiDef4
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      conditions:
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      Routine AntiDef4
    LoopTerminator antidef4loop
    LoopInitiator antidef5loop loopType="TrialHandler"
      Selected rows = 3
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doAntiDef5
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      conditions:
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      Routine AntiDef5
    LoopTerminator antidef5loop
    LoopInitiator feedCCloop2 loopType="TrialHandler"
      Selected rows = 4
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doFeedCC
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      conditions:
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      Routine FeedCC
    LoopTerminator feedCCloop2
    LoopInitiator feedCDloop2 loopType="TrialHandler"
      Selected rows = 5
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doFeedCD
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      conditions:
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      Routine FeedCD
    LoopTerminator feedCDloop2
    LoopInitiator feedDCloop2 loopType="TrialHandler"
      Selected rows = 6
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doFeedDC
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      conditions:
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      Routine FeedDC
    LoopTerminator feedDCloop2
    LoopInitiator feedDDloop2 loopType="TrialHandler"
      Selected rows = 7
      conditionsFile = stimuli\PDstimuli.xlsx
      loopType = random
      nReps = $doFeedDD
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      conditions:
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      Routine FeedDD
    LoopTerminator feedDDloop2
    Routine roundcount
    Routine blank
  LoopTerminator fullgameloop
  Routine blank
  Routine CompleteScreen
